setForegroundColor(0, 0, 0);
setTool(6);
run("Line Width...", "line=5");

macro "Set only active on fire Action Tool - C108F123dCa0aF423dCf40F723dCfb0Fa23dCff9Fd23d"
    {
    run("Fire");
    }

macro "Set all on fire Action Tool - C108F123dCa0aF423dCf40F723dCfb0Fa23dCff9Fd23d"
    {
    run("setFire [f2]");
    }

macro "RGB Merge Action Tool - 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"
    {
	run("RGB Merge...");
    run("8-bit");    
    run("Fire");	
    }

macro "Mask Generator Action Tool - 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"
    {
    run("Mask Generator");
    }

macro "Ratio Calculator Action Tool - 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"
    {
    run("Ratio Calculator");
    }

macro "Complete Calculation Action Tool - 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"
    {
    run("Mask Generator");
    run("Ratio Calculator");
    }

macro "Ratio Analysis Action Tool- C000D45D55D65D6bD72D73D74D75D76D77D78D7bD85D8bD95D9bDa5CaaaD44D46D54D56D5bD64D66D71D79D94D96Da4Da6DabC666D82D83D87D88Db5CcccD81D89Db4Db6C333D6cD7cD8cD9cC555D84D86CbbbD5cDac"
   {
   run("Ratio Analysis");
   }

macro "Save as TIFF Action Tool - C0afo11eeC000O11eeT6d0aS"
    {
    run("Tiff...");
    }

macro "setFire [f2]"
    {
//    print("\\Clear");
    setBatchMode(true);
    i=1;
    j=-1;    
    while (i<=nImages)
        {
        if (isOpen(j))
            {
            selectImage(j);
            bD=bitDepth();
//            title=getTitle();
//            print("ID of image "+i+" of "+nImages+", '"+title+"' is: "+j+", bits: "+bD+".");
            if (bD==8)
                {
                run("Fire");
                }
            i++;
            }
        j=j-1;
        }
    setBatchMode(false);
    }

macro "closeAll [f10]"
    {
    while (nImages>0)
        {
        selectImage(nImages);  
        run("Close");
        }
    }    

function removeBackground()
    {
    title=getTitle();
    meanBG=getNumber("Mean Background:", 10);
    newMax=255/(255-meanBG)

    run("Subtract...", "value="+meanBG+" stack");
    run("Multiply...", "value="+newMax+" stack");

    return(0);
    }

macro "info"
    {
    bD=bitDepth();
    title=getTitle();
    i=getImageID();
    print("ID of image '"+title+"' is: "+i+", bits: "+bD+".");
    }

